private function A_UserInput(  ) variable ;
private function B_WorklistHandling(  ) variable ;
private function C_LoadInstructions(  ) void ;
private function D_BarcodeScanning(  ) void ;
private function E_SequenceCreation(  ) void ;
private function F_PipettingSteps(  ) void ;
private function _MappingFileGen(  ) void ;
private function _TipEject( variable _strCP ) void ;
private function _TipPickup( sequence & _seq, variable _strCP, variable _strTipCounter ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  SLACKMESSENGER_V2::SendUpdate(ML_STAR, Translate("abort"));
  _MappingFileGen();
}

private function A_UserInput(  ) variable {
  private dialog customDialog_1;
  private variable rtnValue;
  private dialog customDialog_2;
  private variable _blnVisible_Dest5;
  private variable _rtnValue;
  private variable _blnVisible_Src1;
  private variable _blnVisible_Src2;
  private variable _blnVisible_Src3;
  private variable _blnVisible_Dest1;
  private variable _blnVisible_Src4;
  private variable _blnVisible_Dest2;
  private variable _blnVisible_Src5;
  private variable _blnVisible_Dest3;
  private variable _blnVisible_Dest4;
  private dialog customDialog_3;
  private variable intLabwarePos_Src1;
  private variable strLabware_Src1;
  private variable strLabware_Dest1;
  private variable intLabwarePos_Src2;
  private variable strLabware_Src2;
  private variable strLabware_Dest2;
  private variable intLabwarePos_Src3;
  private variable strLabware_Src3;
  private variable strLabware_Dest3;
  private variable intLabwarePos_Src4;
  private variable strLabware_Src4;
  private variable strLabware_Dest4;
  private variable intLabwarePos_Src5;
  private variable strLabware_Src5;
  private variable strLabware_Dest5;
  private variable intLabwarePos_Dest1;
  private variable loopCounter1;
  private variable intLabwarePos_Dest2;
  private variable loopCounter2;
  private variable _blnVisible_Dest;
  private variable intLabwarePos_Dest3;
  private variable intLabwarePos_Dest4;
  private variable intLabwarePos_Dest5;
  private variable arrPossibleLabware[];
  MECC::TraceComment(Translate("####################################\n         USER INPUT: START\n####################################"));
  strWorklistFilePath = Translate("Find Worklist...");
  blnDiluentTipSwap = 1;
  customDialog_1.InitCustomDialog("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");
  customDialog_1.SetCustomDialogProperty( "path1.Path", strWorklistFilePath );
  customDialog_1.SetCustomDialogProperty( "checkBox1.IsChecked", blnDiluentTipSwap );
  customDialog_1.ShowCustomDialog();
  rtnValue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
  strWorklistFilePath = customDialog_1.GetCustomDialogProperty( "path1.Path" );
  blnDiluentTipSwap = customDialog_1.GetCustomDialogProperty( "checkBox1.IsChecked" );
  if (rtnValue == 2)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## The method was closed by the user"), Translate(""));
    abort;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Worklist Path: "), strWorklistFilePath);
  if (loopCounter_Main == 1)
  {
    SLACKMESSENGER_V2::SelectMessagingPlatform(1);
  }
  else
  {
  }
  rtn = B_WorklistHandling();
  if (rtn == 1)
  {
    return (1);
  }
  rtnValue = 0;
  _blnVisible_Src1 = 0;
  _blnVisible_Src2 = 0;
  _blnVisible_Src3 = 0;
  _blnVisible_Src4 = 0;
  _blnVisible_Src5 = 0;
  _blnVisible_Dest1 = 0;
  _blnVisible_Dest2 = 0;
  _blnVisible_Dest3 = 0;
  _blnVisible_Dest4 = 0;
  _blnVisible_Dest5 = 0;
  if (intNumberOfSourceBarcodes >= 1)
  {
    _blnVisible_Src1 = 1;
  }
  if (intNumberOfSourceBarcodes >= 2)
  {
    _blnVisible_Src2 = 1;
  }
  if (intNumberOfSourceBarcodes >= 3)
  {
    _blnVisible_Src3 = 1;
  }
  if (intNumberOfSourceBarcodes >= 4)
  {
    _blnVisible_Src4 = 1;
  }
  if (intNumberOfSourceBarcodes >= 5)
  {
    _blnVisible_Src5 = 1;
  }
  if (intNumberOfDestinationBarcodes >= 1)
  {
    _blnVisible_Dest1 = 1;
  }
  if (intNumberOfDestinationBarcodes >= 2)
  {
    _blnVisible_Dest2 = 1;
  }
  if (intNumberOfDestinationBarcodes >= 3)
  {
    _blnVisible_Dest3 = 1;
  }
  if (intNumberOfDestinationBarcodes >= 4)
  {
    _blnVisible_Dest4 = 1;
  }
  if (intNumberOfDestinationBarcodes >= 5)
  {
    _blnVisible_Dest5 = 1;
  }
  arrPossibleLabware.SetSize(0);
  arrPossibleLabware.AddAsLast(Translate("Eppendorf twin.tec PCR Plate 96 - #0030128648"));
  arrPossibleLabware.AddAsLast(Translate("Nunc 96w Polypropylene DeepWell - #260252"));
  arrPossibleLabware.AddAsLast(Translate("Abgene 96w 2.2mL Polypropylene DeepWell - #AB0932"));
  intLabwarePos_Src1 = 1;
  intLabwarePos_Src2 = 1;
  intLabwarePos_Src3 = 1;
  intLabwarePos_Src4 = 1;
  intLabwarePos_Src5 = 1;
  intLabwarePos_Dest1 = 1;
  intLabwarePos_Dest2 = 1;
  intLabwarePos_Dest3 = 1;
  intLabwarePos_Dest4 = 1;
  intLabwarePos_Dest5 = 1;
  {
    loopCounter2 = 0;
    while (1 == 1)
    {
      loopCounter2 = loopCounter2 + 1;
      if (rtnValue == 1)
      {
        break;
      }
      strLabware_Src1 = arrPossibleLabware.ElementAt( intLabwarePos_Src1 -1);
      strLabware_Src2 = arrPossibleLabware.ElementAt( intLabwarePos_Src2 -1);
      strLabware_Src3 = arrPossibleLabware.ElementAt( intLabwarePos_Src3 -1);
      strLabware_Src4 = arrPossibleLabware.ElementAt( intLabwarePos_Src4 -1);
      strLabware_Src5 = arrPossibleLabware.ElementAt( intLabwarePos_Src5 -1);
      strLabware_Dest1 = arrPossibleLabware.ElementAt( intLabwarePos_Dest1 -1);
      strLabware_Dest2 = arrPossibleLabware.ElementAt( intLabwarePos_Dest2 -1);
      strLabware_Dest3 = arrPossibleLabware.ElementAt( intLabwarePos_Dest3 -1);
      strLabware_Dest4 = arrPossibleLabware.ElementAt( intLabwarePos_Dest4 -1);
      strLabware_Dest5 = arrPossibleLabware.ElementAt( intLabwarePos_Dest5 -1);
      customDialog_3.InitCustomDialog("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");
      customDialog_3.SetCustomDialogArrayProperty( "comboBox_Dest1.ItemsSource", arrPossibleLabware );
      customDialog_3.SetCustomDialogArrayProperty( "comboBox_Dest2.ItemsSource", arrPossibleLabware );
      customDialog_3.SetCustomDialogArrayProperty( "comboBox_Dest3.ItemsSource", arrPossibleLabware );
      customDialog_3.SetCustomDialogArrayProperty( "comboBox_Dest4.ItemsSource", arrPossibleLabware );
      customDialog_3.SetCustomDialogArrayProperty( "comboBox_Dest5.ItemsSource", arrPossibleLabware );
      customDialog_3.SetCustomDialogArrayProperty( "comboBox_Src1.ItemsSource", arrPossibleLabware );
      customDialog_3.SetCustomDialogArrayProperty( "comboBox_Src2.ItemsSource", arrPossibleLabware );
      customDialog_3.SetCustomDialogArrayProperty( "comboBox_Src3.ItemsSource", arrPossibleLabware );
      customDialog_3.SetCustomDialogArrayProperty( "comboBox_Src4.ItemsSource", arrPossibleLabware );
      customDialog_3.SetCustomDialogArrayProperty( "comboBox_Src5.ItemsSource", arrPossibleLabware );
      customDialog_3.SetCustomDialogProperty( "comboBox_Dest1.IsEnabled", _blnVisible_Dest1 );
      customDialog_3.SetCustomDialogProperty( "comboBox_Dest1.SelectedIndex", intLabwarePos_Dest1 );
      customDialog_3.SetCustomDialogProperty( "comboBox_Dest2.IsEnabled", _blnVisible_Dest2 );
      customDialog_3.SetCustomDialogProperty( "comboBox_Dest2.SelectedIndex", intLabwarePos_Dest2 );
      customDialog_3.SetCustomDialogProperty( "comboBox_Dest3.IsEnabled", _blnVisible_Dest3 );
      customDialog_3.SetCustomDialogProperty( "comboBox_Dest3.SelectedIndex", intLabwarePos_Dest3 );
      customDialog_3.SetCustomDialogProperty( "comboBox_Dest4.IsEnabled", _blnVisible_Dest4 );
      customDialog_3.SetCustomDialogProperty( "comboBox_Dest4.SelectedIndex", intLabwarePos_Dest4 );
      customDialog_3.SetCustomDialogProperty( "comboBox_Dest5.IsEnabled", _blnVisible_Dest5 );
      customDialog_3.SetCustomDialogProperty( "comboBox_Dest5.SelectedIndex", intLabwarePos_Dest5 );
      customDialog_3.SetCustomDialogProperty( "comboBox_Src1.SelectedIndex", intLabwarePos_Src1 );
      customDialog_3.SetCustomDialogProperty( "comboBox_Src1.IsEnabled", _blnVisible_Src1 );
      customDialog_3.SetCustomDialogProperty( "comboBox_Src2.SelectedIndex", intLabwarePos_Src2 );
      customDialog_3.SetCustomDialogProperty( "comboBox_Src2.IsEnabled", _blnVisible_Src2 );
      customDialog_3.SetCustomDialogProperty( "comboBox_Src3.SelectedIndex", intLabwarePos_Src3 );
      customDialog_3.SetCustomDialogProperty( "comboBox_Src3.IsEnabled", _blnVisible_Src3 );
      customDialog_3.SetCustomDialogProperty( "comboBox_Src4.SelectedIndex", intLabwarePos_Src4 );
      customDialog_3.SetCustomDialogProperty( "comboBox_Src4.IsEnabled", _blnVisible_Src4 );
      customDialog_3.SetCustomDialogProperty( "comboBox_Src5.SelectedIndex", intLabwarePos_Src5 );
      customDialog_3.SetCustomDialogProperty( "comboBox_Src5.IsEnabled", _blnVisible_Src5 );
      customDialog_3.SetCustomDialogProperty( "image_Src1.Source", strLabware_Src1 );
      customDialog_3.SetCustomDialogProperty( "image_Src1.IsVisible", _blnVisible_Src1 );
      customDialog_3.SetCustomDialogProperty( "image_Src2.IsVisible", _blnVisible_Src2 );
      customDialog_3.SetCustomDialogProperty( "image_Src2.Source", strLabware_Src2 );
      customDialog_3.SetCustomDialogProperty( "image_Src3.Source", strLabware_Src3 );
      customDialog_3.SetCustomDialogProperty( "image_Src3.IsVisible", _blnVisible_Src3 );
      customDialog_3.SetCustomDialogProperty( "image_Src4.Source", strLabware_Src4 );
      customDialog_3.SetCustomDialogProperty( "image_Src4.IsVisible", _blnVisible_Src4 );
      customDialog_3.SetCustomDialogProperty( "image_Src5.IsVisible", _blnVisible_Src5 );
      customDialog_3.SetCustomDialogProperty( "image_Src5.Source", strLabware_Src5 );
      customDialog_3.SetCustomDialogProperty( "image_Dest1.Source", strLabware_Dest1 );
      customDialog_3.SetCustomDialogProperty( "image_Dest1.IsVisible", _blnVisible_Dest1 );
      customDialog_3.SetCustomDialogProperty( "image_Dest2.Source", strLabware_Dest2 );
      customDialog_3.SetCustomDialogProperty( "image_Dest2.IsVisible", _blnVisible_Dest2 );
      customDialog_3.SetCustomDialogProperty( "image_Dest3.Source", strLabware_Dest3 );
      customDialog_3.SetCustomDialogProperty( "image_Dest3.IsVisible", _blnVisible_Dest3 );
      customDialog_3.SetCustomDialogProperty( "image_Dest4.IsVisible", _blnVisible_Dest4 );
      customDialog_3.SetCustomDialogProperty( "image_Dest4.Source", strLabware_Dest4 );
      customDialog_3.SetCustomDialogProperty( "image_Dest5.Source", strLabware_Dest5 );
      customDialog_3.SetCustomDialogProperty( "image_Dest5.IsVisible", _blnVisible_Dest5 );
      customDialog_3.ShowCustomDialog();
      rtnValue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
      intLabwarePos_Dest1 = customDialog_3.GetCustomDialogProperty( "comboBox_Dest1.SelectedIndex" );
      intLabwarePos_Dest2 = customDialog_3.GetCustomDialogProperty( "comboBox_Dest2.SelectedIndex" );
      intLabwarePos_Dest3 = customDialog_3.GetCustomDialogProperty( "comboBox_Dest3.SelectedIndex" );
      intLabwarePos_Dest4 = customDialog_3.GetCustomDialogProperty( "comboBox_Dest4.SelectedIndex" );
      intLabwarePos_Dest5 = customDialog_3.GetCustomDialogProperty( "comboBox_Dest5.SelectedIndex" );
      intLabwarePos_Src1 = customDialog_3.GetCustomDialogProperty( "comboBox_Src1.SelectedIndex" );
      intLabwarePos_Src2 = customDialog_3.GetCustomDialogProperty( "comboBox_Src2.SelectedIndex" );
      intLabwarePos_Src3 = customDialog_3.GetCustomDialogProperty( "comboBox_Src3.SelectedIndex" );
      intLabwarePos_Src4 = customDialog_3.GetCustomDialogProperty( "comboBox_Src4.SelectedIndex" );
      intLabwarePos_Src5 = customDialog_3.GetCustomDialogProperty( "comboBox_Src5.SelectedIndex" );
      if (rtnValue == 2)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## The method was closed by the user"), Translate(""));
        abort;
      }
    }
  }
  return (0);
}

private function F_PipettingSteps(  ) void {
  private variable intNumberOfChannels;
  private variable loopCounter2;
  private variable arrLC[];
  private variable arrLC_Prev[];
  private variable fltNumberOfLoops;
  private variable loopCounter1;
  private variable loopCounter3;
  private variable intIndex;
  private variable strCP;
  private variable strCP_1000;
  private variable strCP_50;
  private variable strCP_10;
  private variable strCP_Eject;
  private variable strCP_300;
  private variable intPipettingIndex;
  private variable intNumberOfDiluentTransfers;
  private variable intNumberOfSampleLoops;
  private variable intNumberOfSampleTransfers;
  private variable arrAspMix_Volumes[];
  private variable intFound;
  private variable intMixCycles;
  private variable arrDestinationMixingVolume[];
  private variable intMixVol_Channel;
  MECC::TraceComment(Translate("###################################\n       PIPETTING STEPS: START\n###################################"));
  intNumberOfChannels = DevGetCfgValueWithKey(ML_STAR, 1);
  arrLC.SetSize(intNumberOfChannels);
  arrLC_Prev.SetSize(intNumberOfChannels);
  MECC::TraceComment(Translate("===== Diluent Transfers ====="));
  if (blnDiluentTransfer == 1)
  {
    intPipettingIndex = 1;
    intIndex = 1;
    intNumberOfDiluentTransfers = SeqGetTotal(seqDestination_Diluent);
    fltNumberOfLoops = intNumberOfDiluentTransfers / (intNumberOfChannels * 1.0);
    intNumberOfDiluentLoops = MthCeiling(fltNumberOfLoops);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Number of Diluent loops: "), intNumberOfDiluentLoops);
    {
      for(loopCounter2 = 0; loopCounter2 < intNumberOfChannels;)
      {
        loopCounter2 = loopCounter2 + 1;
        arrLC_Prev.SetAt(loopCounter2-1, Translate("temp"));
      }
    }
    {
      for(loopCounter1 = 0; loopCounter1 < intNumberOfDiluentLoops;)
      {
        loopCounter1 = loopCounter1 + 1;
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Diluent Loop Counter: "), loopCounter1, Translate("/"), intNumberOfDiluentLoops);
        strCP_Eject = Translate("");
        strCP = Translate("");
        strCP_10 = Translate("");
        strCP_50 = Translate("");
        strCP_300 = Translate("");
        strCP_1000 = Translate("");
        arrAspMix_Volumes.SetSize(0);
        {
          for(loopCounter3 = 0; loopCounter3 < intNumberOfChannels;)
          {
            loopCounter3 = loopCounter3 + 1;
            if (intIndex > intNumberOfDiluentTransfers)
            {
              strCP = strCP + Translate("0");
              strCP_10 = strCP_10 + Translate("0");
              strCP_50 = strCP_50 + Translate("0");
              strCP_300 = strCP_300 + Translate("0");
              strCP_1000 = strCP_1000 + Translate("0");
              strCP_Eject = strCP_Eject + Translate("0");
              arrTransferVolumes_Diluent.AddAsLast(0);
              arrLC.SetAt(loopCounter3-1, Translate("HighNeedle_Water_DispenseJet"));
              arrAspMix_Volumes.AddAsLast(0);
            }
            else
            {
              strCP = strCP + "1";
              if (arrTransferVolumes_Diluent.ElementAt( intIndex -1) <= intTipSize_10)
              {
                arrLC.SetAt(loopCounter3-1, strLC_10);
                if (strLC_10 == arrLC_Prev.ElementAt( loopCounter3 -1))
                {
                  strCP_10 = strCP_10 + Translate("0");
                  strCP_Eject = strCP_Eject + Translate("0");
                  arrAspMix_Volumes.AddAsLast(0);
                }
                else
                {
                  strCP_10 = strCP_10 + Translate("1");
                  strCP_Eject = strCP_Eject + Translate("1");
                  arrAspMix_Volumes.AddAsLast(intTipSize_10);
                }
                strCP_50 = strCP_50 + Translate("0");
                strCP_300 = strCP_300 + Translate("0");
                strCP_1000 = strCP_1000 + Translate("0");
              }
              else
              {
                if (arrTransferVolumes_Diluent.ElementAt( intIndex -1) <= intTipSize_50)
                {
                  arrLC.SetAt(loopCounter3-1, strLC_50);
                  if (strLC_50 == arrLC_Prev.ElementAt( loopCounter3 -1))
                  {
                    strCP_50 = strCP_50 + Translate("0");
                    strCP_Eject = strCP_Eject + Translate("0");
                    arrAspMix_Volumes.AddAsLast(0);
                  }
                  else
                  {
                    strCP_50 = strCP_50 + Translate("1");
                    strCP_Eject = strCP_Eject + Translate("1");
                    arrAspMix_Volumes.AddAsLast(intTipSize_50);
                  }
                  strCP_10 = strCP_10 + Translate("0");
                  strCP_300 = strCP_300 + Translate("0");
                  strCP_1000 = strCP_1000 + Translate("0");
                }
                else
                {
                  if (arrTransferVolumes_Diluent.ElementAt( intIndex -1) <= intTipSize_300)
                  {
                    arrLC.SetAt(loopCounter3-1, strLC_300);
                    if (strLC_300 == arrLC_Prev.ElementAt( loopCounter3 -1))
                    {
                      strCP_300 = strCP_300 + Translate("0");
                      strCP_Eject = strCP_Eject + Translate("0");
                      arrAspMix_Volumes.AddAsLast(0);
                    }
                    else
                    {
                      strCP_300 = strCP_300 + Translate("1");
                      strCP_Eject = strCP_Eject + Translate("1");
                      arrAspMix_Volumes.AddAsLast(intTipSize_300);
                    }
                    strCP_10 = strCP_10 + Translate("0");
                    strCP_50 = strCP_50 + Translate("0");
                    strCP_1000 = strCP_1000 + Translate("0");
                  }
                  else
                  {
                    if (arrTransferVolumes_Diluent.ElementAt( intIndex -1) <= intTipSize_1000)
                    {
                      arrLC.SetAt(loopCounter3-1, strLC_1000);
                      if (strLC_1000 == arrLC_Prev.ElementAt( loopCounter3 -1))
                      {
                        strCP_1000 = strCP_1000 + Translate("0");
                        strCP_Eject = strCP_Eject + Translate("0");
                        arrAspMix_Volumes.AddAsLast(0);
                      }
                      else
                      {
                        strCP_1000 = strCP_1000 + Translate("1");
                        strCP_Eject = strCP_Eject + Translate("1");
                        arrAspMix_Volumes.AddAsLast(intTipSize_1000);
                      }
                      strCP_10 = strCP_10 + Translate("0");
                      strCP_50 = strCP_50 + Translate("0");
                      strCP_300 = strCP_300 + Translate("0");
                    }
                  }
                }
              }
            }
            intIndex = intIndex + 1;
          }
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Channel Pattern: "), strCP);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 10uL: "), strCP_10);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 50uL: "), strCP_50);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 300uL: "), strCP_300);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 1000uL: "), strCP_1000);
        TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("Transfer Volumes"), Translate("Liquid Classes"), arrTransferVolumes_Diluent, arrLC);
        if (loopCounter1 != 1)
        {
          _TipEject(strCP_Eject);
        }
        _TipPickup(ML_STAR.Tips_10uLFiltered, strCP_10, strTipCounter_10);
        _TipPickup(ML_STAR.Tips_50ulFiltered, strCP_50, strTipCounter_50);
        _TipPickup(ML_STAR.Tips_300ulFiltered, strCP_300, strTipCounter_300);
        _TipPickup(ML_STAR.Tips_1000ulFiltered, strCP_1000, strTipCounter_1000);
        intFound = StrFind(strCP_Eject, Translate("1"));
        if (intFound != -1)
        {
          intMixCycles = 1;
        }
        else
        {
          intMixCycles = 0;
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        intPipettingIndex = intPipettingIndex + intNumberOfChannels;
        if (blnDiluentTipSwap == 0)
        {
          arrLC_Prev=arrLC;
        }
      }
    }
    _TipEject(Translate("11111111"));
  }
  MECC::TraceComment(Translate("===== Sample Transfers ====="));
  intPipettingIndex = 1;
  intIndex = 1;
  intNumberOfSampleTransfers = SeqGetTotal(seqSource_Sample);
  fltNumberOfLoops = intNumberOfSampleTransfers / (intNumberOfChannels * 1.0);
  intNumberOfSampleLoops = MthCeiling(fltNumberOfLoops);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Number of Sample loops: "), intNumberOfSampleLoops);
  {
    for(loopCounter1 = 0; loopCounter1 < intNumberOfSampleLoops;)
    {
      loopCounter1 = loopCounter1 + 1;
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Sample Loop Counter: "), loopCounter1, Translate("/"), intNumberOfSampleLoops);
      arrDestinationMixingVolume.SetSize(intNumberOfChannels);
      strCP = Translate("");
      strCP_10 = Translate("");
      strCP_50 = Translate("");
      strCP_300 = Translate("");
      strCP_1000 = Translate("");
      {
        for(loopCounter3 = 0; loopCounter3 < intNumberOfChannels;)
        {
          loopCounter3 = loopCounter3 + 1;
          if (intIndex > intNumberOfSampleTransfers)
          {
            strCP = strCP + "0";
            strCP_10 = strCP_10 + Translate("0");
            strCP_50 = strCP_50 + Translate("0");
            strCP_300 = strCP_300 + Translate("0");
            strCP_1000 = strCP_1000 + Translate("0");
            arrTransferVolumes_Sample.AddAsLast(0);
            arrDestinationMixingVolume.SetAt(loopCounter3-1, 0);
            arrLC.SetAt(loopCounter3-1, Translate("HighNeedle_Water_DispenseJet"));
          }
          else
          {
            strCP = strCP + "1";
            if (arrTransferVolumes_Sample.ElementAt( intIndex -1) <= intTipSize_10)
            {
              arrLC.SetAt(loopCounter3-1, strLC_10);
              strCP_10 = strCP_10 + Translate("1");
              strCP_50 = strCP_50 + Translate("0");
              strCP_300 = strCP_300 + Translate("0");
              strCP_1000 = strCP_1000 + Translate("0");
              intMixVol_Channel = intTipSize_10;
            }
            else
            {
              if (arrTransferVolumes_Sample.ElementAt( intIndex -1) <= intTipSize_50)
              {
                arrLC.SetAt(loopCounter3-1, strLC_50);
                strCP_50 = strCP_50 + Translate("1");
                strCP_10 = strCP_10 + Translate("0");
                strCP_300 = strCP_300 + Translate("0");
                strCP_1000 = strCP_1000 + Translate("0");
                intMixVol_Channel = intTipSize_50;
              }
              else
              {
                if (arrTransferVolumes_Sample.ElementAt( intIndex -1) <= intTipSize_300)
                {
                  arrLC.SetAt(loopCounter3-1, strLC_300);
                  strCP_300 = strCP_300 + Translate("1");
                  strCP_10 = strCP_10 + Translate("0");
                  strCP_50 = strCP_50 + Translate("0");
                  strCP_1000 = strCP_1000 + Translate("0");
                  intMixVol_Channel = intTipSize_300;
                }
                else
                {
                  if (arrTransferVolumes_Sample.ElementAt( intIndex -1) <= intTipSize_1000)
                  {
                    arrLC.SetAt(loopCounter3-1, strLC_1000);
                    strCP_1000 = strCP_1000 + Translate("1");
                    strCP_10 = strCP_10 + Translate("0");
                    strCP_50 = strCP_50 + Translate("0");
                    strCP_300 = strCP_300 + Translate("0");
                    intMixVol_Channel = intTipSize_1000;
                  }
                }
              }
            }
          }
          if (intIndex <= intNumberOfSampleTransfers)
          {
            if (arrMixVolumes.ElementAt( intIndex -1) >= intMixVol_Channel)
            {
              arrDestinationMixingVolume.SetAt(loopCounter3-1, intMixVol_Channel);
            }
            else
            {
              arrDestinationMixingVolume.SetAt(loopCounter3-1, arrMixVolumes.ElementAt( intIndex -1));
            }
          }
          intIndex = intIndex + 1;
        }
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Channel Pattern: "), strCP);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 10uL: "), strCP_10);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 50uL: "), strCP_50);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 300uL: "), strCP_300);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 1000uL: "), strCP_1000);
      TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Destination Mixing Volumes"), arrDestinationMixingVolume);
      TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("Transfer Volumes"), Translate("Liquid Classes"), arrTransferVolumes_Sample, arrLC);
      _TipPickup(ML_STAR.Tips_10uLFiltered, strCP_10, strTipCounter_10);
      _TipPickup(ML_STAR.Tips_50ulFiltered, strCP_50, strTipCounter_50);
      _TipPickup(ML_STAR.Tips_300ulFiltered, strCP_300, strTipCounter_300);
      _TipPickup(ML_STAR.Tips_1000ulFiltered, strCP_1000, strTipCounter_1000);
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      _TipEject(strCP);
      intPipettingIndex = intPipettingIndex + intNumberOfChannels;
    }
  }
  MECC::TraceComment(Translate("###################################\n                 PIPETTING STEPS: END\n###################################"));
  _MappingFileGen();
}

private function E_SequenceCreation(  ) void {
  private variable loopCounter1;
  private variable loopCounter2;
  private variable intVolume;
  private variable intBarcodePos;
  private variable strBarcode;
  MECC::TraceComment(Translate("####################################\n      SEQUENCE CREATION: START\n####################################"));
  arrTransferVolumes_Sample.SetSize(0);
  arrTransferVolumes_Diluent.SetSize(0);
  SeqRemoveAll(seqSource_Sample);
  SeqRemoveAll(seqDestination_Sample);
  SeqRemoveAll(seqDestination_Diluent);
  {
    for(loopCounter1 = 0; loopCounter1 < intNumberOfTransfers;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (arrSampleVolumes.ElementAt( loopCounter1 -1) != 0)
      {
        intVolume=arrSampleVolumes.GetAt(loopCounter1-1);
        arrTransferVolumes_Sample.AddAsLast(intVolume);
        strBarcode=arrSourceBarcodes.GetAt(loopCounter1-1);
        intBarcodePos = LOOKUP::Lookup(arrSourceBarcodes_Unique, strBarcode);
        SeqAdd(seqSource_Sample, arrSourceLabwareIDs.ElementAt( intBarcodePos -1), arrSourceWells.ElementAt( loopCounter1 -1));
        strBarcode=arrDestinationBarcodes.GetAt(loopCounter1-1);
        intBarcodePos = LOOKUP::Lookup(arrDestinationBarcodes_Unique, strBarcode);
        SeqAdd(seqDestination_Sample, arrDestinationLabwareIDs.ElementAt( intBarcodePos -1), arrDestinationWells.ElementAt( loopCounter1 -1));
      }
    }
  }
  {
    for(loopCounter2 = 0; loopCounter2 < intNumberOfTransfers;)
    {
      loopCounter2 = loopCounter2 + 1;
      if (arrDiluentVolumes.ElementAt( loopCounter2 -1) > 0)
      {
        intVolume=arrDiluentVolumes.GetAt(loopCounter2-1);
        arrTransferVolumes_Diluent.AddAsLast(intVolume);
        strBarcode=arrDestinationBarcodes.GetAt(loopCounter2-1);
        intBarcodePos = LOOKUP::Lookup(arrDestinationBarcodes_Unique, strBarcode);
        SeqAdd(seqDestination_Diluent, arrDestinationLabwareIDs.ElementAt( intBarcodePos -1), arrDestinationWells.ElementAt( loopCounter2 -1));
      }
    }
  }
  OPT_ORDER::OptChannels_PosVol(seqDestination_Diluent, arrTransferVolumes_Diluent, ML_STAR);
  OPT_ORDER::OptChannels_AspDisp2Vol(seqSource_Sample, seqDestination_Sample, arrTransferVolumes_Sample, arrMixVolumes, ML_STAR);
  if (intTraceLevel == TRACE_LEVEL_DEBUG)
  {
    Util2::Debug::TraceSequenceAndData_1(Translate("Diluent Sequences"), seqDestination_Diluent, arrTransferVolumes_Diluent);
    Util2::Debug::TraceSequencesAndData_2(Translate("Sample Sequences"), seqSource_Sample, seqDestination_Sample, arrTransferVolumes_Sample, arrMixVolumes);
  }
}

private function B_WorklistHandling(  ) variable {
  private variable strWorklist_DestBC;
  private variable strWorklist_DestWell;
  private variable strWorklist_VolDil;
  private variable strWorklist_SrcWell;
  private variable strWorklist_SrcBC;
  private variable strWorklist_VolSam;
  private file hndWorklist;
  private variable __[];
  private variable fltWorklist_VolDil;
  private variable fltWorklist_VolSam;
  private variable blnError;
  private variable loopCounter1;
  private variable intMaxSourcePlateNumber;
  private variable intMaxDestinationPlateNumber;
  private variable intDiluentVol;
  private variable loopCounter2;
  private variable intVolume;
  private variable fltMixVol;
  MECC::TraceComment(Translate("####################################\n      WORKLIST HANDLING: START\n####################################"));
  SeqGetLabwareIds(ML_STAR.Load_Source, arrSourceLabwareIDs);
  intMaxSourcePlateNumber=arrSourceLabwareIDs.GetSize();
  SeqGetLabwareIds(ML_STAR.Load_Destination, arrDestinationLabwareIDs);
  intMaxDestinationPlateNumber=arrDestinationLabwareIDs.GetSize();
  arrSourceBarcodes.SetSize(0);
  arrSourceWells.SetSize(0);
  arrDestinationBarcodes.SetSize(0);
  arrDestinationWells.SetSize(0);
  arrSampleVolumes.SetSize(0);
  arrDiluentVolumes.SetSize(0);
  arrMixVolumes.SetSize(0);
  hndWorklist.AddField("Source Label", strWorklist_SrcBC, hslString, 255);
  hndWorklist.AddField("Source Position", strWorklist_SrcWell, hslString, 255);
  hndWorklist.AddField("Destination Label", strWorklist_DestBC, hslString, 255);
  hndWorklist.AddField("Destination Position", strWorklist_DestWell, hslString, 255);
  hndWorklist.AddField("Sample Volume", strWorklist_VolSam, hslString, 255);
  hndWorklist.AddField("Diluent Volume", strWorklist_VolDil, hslString, 255);
  hndWorklist.SetDelimiter(hslCSVDelimited);
  if( 0 == hndWorklist.Open(strWorklistFilePath, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strWorklistFilePath, "HxMetEdCompCmd");
  }
  {
    loopCounter1 = 0;
    while (
       (hndWorklist.Eof() == 0)
    )
    {
      loopCounter1 = loopCounter1 + 1;
      if( 0 == hndWorklist.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      WELL_FORMAT::A01_to_A1(strWorklist_SrcWell);
      WELL_FORMAT::A01_to_A1(strWorklist_DestWell);
      fltWorklist_VolSam = StrFVal(strWorklist_VolSam);
      onerror goto errLabel_4 ;
      err.Clear();
      fltWorklist_VolDil = StrFVal(strWorklist_VolDil);
      errLabel_4 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("!! Diluent volume not specified in worklist - 0uL will be transferred"), Translate(""));
        fltWorklist_VolDil = 0;
      }   /* end if from skip handler if no error */
      arrSourceBarcodes.AddAsLast(strWorklist_SrcBC);
      arrSourceWells.AddAsLast(strWorklist_SrcWell);
      arrDestinationBarcodes.AddAsLast(strWorklist_DestBC);
      arrDestinationWells.AddAsLast(strWorklist_DestWell);
      arrSampleVolumes.AddAsLast(fltWorklist_VolSam);
      arrDiluentVolumes.AddAsLast(fltWorklist_VolDil);
      fltMixVol = fltWorklist_VolSam + fltWorklist_VolDil;
      fltMixVol = fltMixVol * 0.8;
      arrMixVolumes.AddAsLast(fltMixVol);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Line Count: "), loopCounter1);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_SrcBC: "), strWorklist_SrcBC);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_SrcWell: "), strWorklist_SrcWell);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_DestBC: "), strWorklist_DestBC);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_DestWell: "), strWorklist_DestWell);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_VolSam: "), strWorklist_VolSam);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_VolDil: "), strWorklist_VolDil);
    }
  }
  if( 0 != hndWorklist.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hndWorklist.RemoveFields();
  intNumberOfTransfers=arrSourceWells.GetSize();
  TRACEARRAY::TraceArray(Translate("Full Worklist"), arrSourceBarcodes, arrSourceWells, arrDestinationBarcodes, arrDestinationWells, arrSampleVolumes, arrDiluentVolumes, __, __, __, __, __, __, __, __, __, __);
  blnError = 0;
  arrSourceBarcodes_Unique.SetSize(0);
  arrDestinationBarcodes_Unique.SetSize(0);
  UNIQUE_MEMBERS::Unique_members(arrSourceBarcodes, arrSourceBarcodes_Unique, 0);
  intNumberOfSourceBarcodes=arrSourceBarcodes_Unique.GetSize();
  if (intNumberOfSourceBarcodes > intMaxSourcePlateNumber)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Worklist contains too many source plates for this method"), Translate(""));
    blnError = 1;
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate(">> Unique Source Barcodes"), arrSourceBarcodes_Unique);
  UNIQUE_MEMBERS::Unique_members(arrDestinationBarcodes, arrDestinationBarcodes_Unique, 0);
  intNumberOfDestinationBarcodes=arrDestinationBarcodes_Unique.GetSize();
  if (intNumberOfDestinationBarcodes > intMaxDestinationPlateNumber)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Worklist contains too many destination plates for this method"), Translate(""));
    blnError = 1;
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate(">> Unique Destination Barcodes"), arrDestinationBarcodes_Unique);
  intDiluentVol = 0;
  blnDiluentTransfer = 1;
  {
    for(loopCounter2 = 0; loopCounter2 < intNumberOfTransfers;)
    {
      loopCounter2 = loopCounter2 + 1;
      intDiluentVol = intDiluentVol + arrDiluentVolumes.ElementAt( loopCounter2 -1);
    }
  }
  if (intDiluentVol == 0)
  {
    blnDiluentTransfer = 0;
  }
  intTipsNeeded_10 = 0;
  intTipsNeeded_50 = 0;
  intTipsNeeded_300 = 0;
  intTipsNeeded_1000 = 0;
  {
    for(loopCounter1 = 0; loopCounter1 < intNumberOfTransfers;)
    {
      loopCounter1 = loopCounter1 + 1;
      intVolume=arrDiluentVolumes.GetAt(loopCounter1-1);
      if (intVolume != 0)
      {
        if (blnDiluentTipSwap == 0)
        {
          if (intVolume <= intTipSize_10)
          {
            if (intTipsNeeded_10 < 8)
            {
              intTipsNeeded_10 = intTipsNeeded_10 + 1;
            }
          }
          else
          {
            if (intVolume <= intTipSize_50)
            {
              if (intTipsNeeded_50 < 8)
              {
                intTipsNeeded_50 = intTipsNeeded_50 + 1;
              }
            }
            else
            {
              if (intVolume <= intTipSize_300)
              {
                if (intTipsNeeded_300 < 8)
                {
                  intTipsNeeded_300 = intTipsNeeded_300 + 1;
                }
              }
              else
              {
                if (intVolume <= intTipSize_1000)
                {
                  if (intTipsNeeded_1000 < 8)
                  {
                    intTipsNeeded_1000 = intTipsNeeded_1000 + 1;
                  }
                }
              }
            }
          }
        }
        else
        {
          if (intVolume <= intTipSize_10)
          {
            intTipsNeeded_10 = intTipsNeeded_10 + 1;
          }
          else
          {
            if (intVolume <= intTipSize_50)
            {
              intTipsNeeded_50 = intTipsNeeded_50 + 1;
            }
            else
            {
              if (intVolume <= intTipSize_300)
              {
                intTipsNeeded_300 = intTipsNeeded_300 + 1;
              }
              else
              {
                if (intVolume <= intTipSize_1000)
                {
                  intTipsNeeded_1000 = intTipsNeeded_1000 + 1;
                }
              }
            }
          }
        }
      }
    }
  }
  {
    for(loopCounter1 = 0; loopCounter1 < intNumberOfTransfers;)
    {
      loopCounter1 = loopCounter1 + 1;
      intVolume=arrSampleVolumes.GetAt(loopCounter1-1);
      if (intVolume <= intTipSize_10)
      {
        intTipsNeeded_10 = intTipsNeeded_10 + 1;
      }
      else
      {
        if (intVolume <= intTipSize_50)
        {
          intTipsNeeded_50 = intTipsNeeded_50 + 1;
        }
        else
        {
          if (intVolume <= intTipSize_300)
          {
            intTipsNeeded_300 = intTipsNeeded_300 + 1;
          }
          else
          {
            if (intVolume <= intTipSize_1000)
            {
              intTipsNeeded_1000 = intTipsNeeded_1000 + 1;
            }
          }
        }
      }
    }
  }
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> "), intTipsNeeded_10, Translate(" 10uL Tips Needed"), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> "), intTipsNeeded_50, Translate(" 50uL Tips Needed"), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> "), intTipsNeeded_300, Translate(" 300uL Tips Needed"), Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> "), intTipsNeeded_1000, Translate(" 1000uL Tips Needed"), Translate(""));
  return (blnError);
}

private function C_LoadInstructions(  ) void {
  private variable intLoadSeqCap_Src;
  private variable loopCounter2;
  private variable strLoadMessage_Temp;
  private variable strBarcode;
  private variable intLoadSeqCap_Dest;
  private variable strLoadMessage;
  private variable arrCarrierIDs[];
  private dialog customDialog_5;
  private variable blnCarriersLoaded;
  private variable arrUnloadedCarrierIDs[];
  MECC::TraceComment(Translate("###################################\n     LOAD INSTRUCTIONS: START\n###################################"));
  intLoadSeqCap_Src = 96 * intNumberOfSourceBarcodes;
  ML_STAR.Load_Source.SetCount(intLoadSeqCap_Src);
  strLoadMessage_Temp = Translate("");
  {
    for(loopCounter2 = 0; loopCounter2 < intNumberOfSourceBarcodes;)
    {
      loopCounter2 = loopCounter2 + 1;
      strBarcode=arrSourceBarcodes_Unique.GetAt(loopCounter2-1);
      strLoadMessage_Temp = StrConcat4(strLoadMessage_Temp, strBarcode, Translate(", "), Translate(""));
    }
  }
  strLoadMessage = StrConcat8(Translate("Please load the "), intNumberOfSourceBarcodes, Translate(" source "), Translate("plate(s) on the highlighted position(s). "), Translate("Plate order by name: "), strLoadMessage_Temp, Translate(""), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.Load_Source, strLoadMessage);
  intLoadSeqCap_Dest = 96 * intNumberOfDestinationBarcodes;
  ML_STAR.Load_Destination.SetCount(intLoadSeqCap_Dest);
  strLoadMessage_Temp = Translate("");
  {
    for(loopCounter2 = 0; loopCounter2 < intNumberOfDestinationBarcodes;)
    {
      loopCounter2 = loopCounter2 + 1;
      strBarcode=arrDestinationBarcodes_Unique.GetAt(loopCounter2-1);
      strLoadMessage_Temp = StrConcat4(strLoadMessage_Temp, strBarcode, Translate(", "), Translate(""));
    }
  }
  strLoadMessage = StrConcat8(Translate("Please load the "), intNumberOfDestinationBarcodes, Translate(" destination "), Translate("plate(s) on the highlighted position(s). "), Translate("Plate order by name: "), strLoadMessage_Temp, Translate(""), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.Load_Destination, strLoadMessage);
  if (blnDiluentTransfer == 1)
  {
    strLoadMessage = StrConcat8(Translate("Please load the "), Translate("diluent reservoir"), Translate(""), Translate(" on the highlighted position(s). "), Translate(""), Translate(""), Translate(""), Translate(""));
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.rgt_cont_60ml_BC_A00_0001, strLoadMessage);
  }
  if (intTipsNeeded_10 != 0)
  {
    LOAD_INSTRUCTIONS::load_instructions_tips(ML_STAR, ML_STAR.Tips_10uLFiltered, 10, intTipsNeeded_10, strTipCounter_10, 1);
  }
  if (intTipsNeeded_50 != 0)
  {
    LOAD_INSTRUCTIONS::load_instructions_tips(ML_STAR, ML_STAR.Tips_50ulFiltered, 50, intTipsNeeded_50, strTipCounter_50, 1);
  }
  if (intTipsNeeded_300 != 0)
  {
    LOAD_INSTRUCTIONS::load_instructions_tips(ML_STAR, ML_STAR.Tips_300ulFiltered, 300, intTipsNeeded_300, strTipCounter_300, 1);
  }
  if (intTipsNeeded_1000 != 0)
  {
    LOAD_INSTRUCTIONS::load_instructions_tips(ML_STAR, ML_STAR.Tips_1000ulFiltered, 1000, intTipsNeeded_1000, strTipCounter_1000, 1);
  }
  arrCarrierIDs.SetSize(0);
  if (intTipsNeeded_10 != 0)
  {
    arrCarrierIDs.AddAsLast(Translate("TIP_CAR_480_A00_0004"));
  }
  if (intTipsNeeded_50 != 0)
  {
    arrCarrierIDs.AddAsLast(Translate("TIP_CAR_480_A00_0001"));
  }
  if (intTipsNeeded_300 != 0)
  {
    arrCarrierIDs.AddAsLast(Translate("TIP_CAR_480_A00_0002"));
  }
  if (intTipsNeeded_1000 != 0)
  {
    arrCarrierIDs.AddAsLast(Translate("TIP_CAR_480_A00_0003"));
  }
  arrCarrierIDs.AddAsLast(Translate("MFX_CAR_5DWP_NestRB_0001"));
  arrCarrierIDs.AddAsLast(Translate("MFX_CAR_5DWP_NestRB_0003"));
  if (blnDiluentTransfer == 1)
  {
    arrCarrierIDs.AddAsLast(Translate("RGT_CAR_5R60_A00_0001"));
  }
  {
    while (1 == 1)
    {
      blnCarriersLoaded = CHECKCARRIERPRESENCE::CheckCarrierPresenceByArrOfLabIDs(ML_STAR, arrCarrierIDs, arrUnloadedCarrierIDs);
      if (blnCarriersLoaded == 0)
      {
        break;
      }
      customDialog_5.InitCustomDialog("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");
      customDialog_5.ShowCustomDialog();
      _rtn = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
      if (_rtn == 2)
      {
        abort;
      }
    }
  }
}

private function D_BarcodeScanning(  ) void {
  private variable loopCounter1;
  private variable loopCounter2;
  MECC::TraceComment(Translate("###################################\n     BARCODE SCANNING: START\n###################################"));
  {
    for(loopCounter1 = 0; loopCounter1 < intNumberOfSourceBarcodes;)
    {
      loopCounter1 = loopCounter1 + 1;
      Util2::VarArrCheckIndex(arrSourceBarcodes_Unique, loopCounter1, "arrSourceBarcodes_Unique");
      Util2::VarArrCheckIndex(arrSourceLabwareIDs, loopCounter1, "arrSourceLabwareIDs");
      STCC::SetElementBarcode(ML_STAR, arrSourceLabwareIDs.ElementAt(loopCounter1-1), "", arrSourceBarcodes_Unique.ElementAt(loopCounter1-1));
    }
  }
  {
    for(loopCounter2 = 0; loopCounter2 < intNumberOfDestinationBarcodes;)
    {
      loopCounter2 = loopCounter2 + 1;
      Util2::VarArrCheckIndex(arrDestinationBarcodes_Unique, loopCounter2, "arrDestinationBarcodes_Unique");
      Util2::VarArrCheckIndex(arrDestinationLabwareIDs, loopCounter2, "arrDestinationLabwareIDs");
      STCC::SetElementBarcode(ML_STAR, arrDestinationLabwareIDs.ElementAt(loopCounter2-1), "", arrDestinationBarcodes_Unique.ElementAt(loopCounter2-1));
    }
  }
}

private function _TipPickup( sequence & _seq, variable _strCP, variable _strTipCounter ) void {
  private variable _intCPLength;
  private variable _blnTip;
  private variable _strTipOfInterest;
  private variable loopCounter1;
  private variable _intTipCount;
  private dialog customDialog_6;
  private variable rtnValue;
  _intCPLength = StrGetLength(_strCP);
  _intTipCount = 0;
  {
    for(loopCounter1 = 0; loopCounter1 < _intCPLength;)
    {
      loopCounter1 = loopCounter1 + 1;
      _strTipOfInterest = StrLeft(_strCP, loopCounter1);
      _strTipOfInterest = StrRight(_strTipOfInterest, 1);
      _blnTip = StrFind(_strTipOfInterest, Translate("1"));
      if (_blnTip != -1)
      {
        _intTipCount = _intTipCount + 1;
      }
    }
  }
  if (_intTipCount == 0)
  {
    return;
  }
  {
    while (1 == 1)
    {
      onerror goto errLabel_7 ;
      err.Clear();
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      break;
      errLabel_7 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SLACKMESSENGER_V2::SendUpdate(ML_STAR, Translate("Error during tip pickup"));
        customDialog_6.InitCustomDialog("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");
        customDialog_6.ShowCustomDialog();
        rtnValue = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
        if (rtnValue == 2)
        {
          abort;
        }
      }   /* end if from skip handler if no error */
    }
  }
  TipCount::Write2(_seq, _strTipCounter, ML_STAR);
}

private function _MappingFileGen(  ) void {
  private variable strMappingFileName;
  private variable intRevFind;
  private variable strWorklistFileName;
  private variable intLength;
  strMappingFileName = Translate("");
  intLength = StrGetLength(strWorklistFilePath);
  intRevFind = StrReverseFind(strWorklistFilePath, Translate("\\"));
  intRevFind = intLength - intRevFind;
  intRevFind = intRevFind - 1;
  strWorklistFileName = StrRight(strWorklistFilePath, intRevFind);
  strMappingFileName = StrConcat4(Translate("MappingFile_"), strWorklistFileName, Translate(""), Translate(""));
  StrReplace(strMappingFileName, Translate(".csv"), Translate(".xls"));
  if (blnDiluentTransfer == 1)
  {
    MECC::TraceComment(Translate("----- Generate Diluent Mapping File -----"));
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, ML_STAR.rgt_cont_60ml_BC_A00_0001);
    {
      variable _FilterIdsArray_8[];
      variable _ColumnIdsArray_8[];
      variable _ColumnNamesArray_8[];
      variable _ExperimentsArray_8[];
      _FilterIdsArray_8.SetSize(0);
      _ColumnNamesArray_8.SetSize(9);
      _ColumnIdsArray_8.SetSize(9);
      _ColumnNamesArray_8.SetAt(0, "RecordId");
      _ColumnIdsArray_8.SetAt(0, 0);
      _ColumnNamesArray_8.SetAt(1, "TRackBC");
      _ColumnIdsArray_8.SetAt(1, 1);
      _ColumnNamesArray_8.SetAt(2, "TPositionId");
      _ColumnIdsArray_8.SetAt(2, 3);
      _ColumnNamesArray_8.SetAt(3, "TStatusSummary");
      _ColumnIdsArray_8.SetAt(3, 5);
      _ColumnNamesArray_8.SetAt(4, "TSumStateDescription");
      _ColumnIdsArray_8.SetAt(4, 6);
      _ColumnNamesArray_8.SetAt(5, "SRackBC");
      _ColumnIdsArray_8.SetAt(5, 8);
      _ColumnNamesArray_8.SetAt(6, "SLabwareId");
      _ColumnIdsArray_8.SetAt(6, 9);
      _ColumnNamesArray_8.SetAt(7, "SPositionId");
      _ColumnIdsArray_8.SetAt(7, 10);
      _ColumnNamesArray_8.SetAt(8, "ActionDateTime");
      _ColumnIdsArray_8.SetAt(8, 12);
      _ExperimentsArray_8.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seqDestination_Diluent, 1, _FilterIdsArray_8, 0, _ColumnIdsArray_8, _ColumnNamesArray_8, _ExperimentsArray_8, strMappingFileName, 1, 1, "", 1);
    }
  }
  MECC::TraceComment(Translate("----- Generate Sample Mapping File -----"));
  STCC::ResetFilterSequences();
  STCC::AddFilterSequence(ML_STAR, seqSource_Sample);
  {
    variable _FilterIdsArray_9[];
    variable _ColumnIdsArray_9[];
    variable _ColumnNamesArray_9[];
    variable _ExperimentsArray_9[];
    _FilterIdsArray_9.SetSize(0);
    _ColumnNamesArray_9.SetSize(9);
    _ColumnIdsArray_9.SetSize(9);
    _ColumnNamesArray_9.SetAt(0, "RecordId");
    _ColumnIdsArray_9.SetAt(0, 0);
    _ColumnNamesArray_9.SetAt(1, "TRackBC");
    _ColumnIdsArray_9.SetAt(1, 1);
    _ColumnNamesArray_9.SetAt(2, "TPositionId");
    _ColumnIdsArray_9.SetAt(2, 3);
    _ColumnNamesArray_9.SetAt(3, "TStatusSummary");
    _ColumnIdsArray_9.SetAt(3, 5);
    _ColumnNamesArray_9.SetAt(4, "TSumStateDescription");
    _ColumnIdsArray_9.SetAt(4, 6);
    _ColumnNamesArray_9.SetAt(5, "SRackBC");
    _ColumnIdsArray_9.SetAt(5, 8);
    _ColumnNamesArray_9.SetAt(6, "SLabwareId");
    _ColumnIdsArray_9.SetAt(6, 9);
    _ColumnNamesArray_9.SetAt(7, "SPositionId");
    _ColumnIdsArray_9.SetAt(7, 10);
    _ColumnNamesArray_9.SetAt(8, "ActionDateTime");
    _ColumnIdsArray_9.SetAt(8, 12);
    _ExperimentsArray_9.SetSize(0);
    STCC::GenerateMappingFileV43Ex1(ML_STAR, seqDestination_Sample, 1, _FilterIdsArray_9, 0, _ColumnIdsArray_9, _ColumnNamesArray_9, _ExperimentsArray_9, strMappingFileName, 1, 1, "", 1);
  }
}

private function _TipEject( variable _strCP ) void {
  if (_blnSaveTips == 1)
  {
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  else
  {
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
}
