 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "Well_Format.hs_" }
 namespace _Method { #include "Unique_members.hs_" }
 namespace _Method { #include "WSI\\TraceArray\\TraceArray.hs_" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "lookup.hs_" }
 namespace _Method { #include "opt_order.hs_" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLDevLib.hsl" }
 namespace _Method { #include "Load Instructions (All)\\load_instructions\\load_instructions.hs_" }
 namespace _Method { #include "CheckCarrierPresence (All)\\CheckCarrierPresence.hs_" }
 namespace _Method { #include "WSI\\SlackMessenger\\SlackMessenger_V2.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "SampleNorm_CherryPick\\SampleNormalisation_CherryPicking.res"
 namespace _Method { #include "HSLFilLib.hsl" }
global device ML_STAR ("SampleNorm_CherryPick\\SampleNormalisation_CherryPicking.lay", "ML_STAR", hslTrue);
variable intTipSize_1000;
variable intTipSize_300;
variable blnSimulationMode;
variable intTipSize_50;
variable intTipSize_10;
variable rtn;
dialog customDialog_1;
variable _rtn;
variable strWorklistFilePath;
variable intNumberOfSourceBarcodes;
variable intNumberOfDestinationBarcodes;
variable arrDestinationBarcodes_Unique[];
variable arrSourceBarcodes_Unique[];
variable intNumberOfTransfers;
variable arrSampleVolumes[];
variable arrDiluentVolumes[];
variable arrSourceBarcodes[];
variable arrDestinationBarcodes[];
variable arrDestinationWells[];
variable arrDestinationLabwareIDs[];
variable arrSourceWells[];
variable arrSourceLabwareIDs[];
sequence seqDestination_Sample;
sequence seqDestination_Diluent;
sequence seqSource_Sample;
variable arrTransferVolumes_Diluent[];
variable arrTransferVolumes_Sample[];
variable intTraceLevel;
variable strTipCounter_1000;
variable strTipCounter_300;
variable strTipCounter_50;
variable strTipCounter_10;
dialog customDialog_2;
variable strLC_10;
variable strLC_1000;
variable strLC_300;
variable strLC_50;
variable intNumberOfDiluentLoops;
variable blnDiluentTransfer;
variable loopCounter_Main;
variable intTipsNeeded_10;
variable intTipsNeeded_1000;
variable intTipsNeeded_300;
variable intTipsNeeded_50;
variable _blnSaveTips;
variable arrMixVolumes[];
variable blnDiluentTipSwap;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    WELL_FORMAT::_InitLibrary();
    UNIQUE_MEMBERS::_InitLibrary();
    TRACEARRAY::_InitLibrary();
    LOOKUP::_InitLibrary();
    OPT_ORDER::_InitLibrary();
    LOAD_INSTRUCTIONS::_InitLibrary();
    CHECKCARRIERPRESENCE::_InitLibrary();
    SLACKMESSENGER_V2::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    intTraceLevel = TRACE_LEVEL_RELEASE;
    _blnSaveTips = 0;
    TRACELEVEL::SetTraceLevel(intTraceLevel);
    blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> blnSimulationMode: "), blnSimulationMode);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    intTipSize_10 = -1;
    if (intTipSize_10 == 10)
    {
      strTipCounter_10 = Translate("TipCounter_10uLFiltered");
      strLC_10 = Translate("LowVolumeFilter_96COREHead_Water_DispenseSurface_Empty");
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- 10uL Tip Counter: "), strTipCounter_10);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- 10uL Liquid Class: "), strLC_10);
    }
    intTipSize_50 = 50;
    if (intTipSize_50 == 50)
    {
      strTipCounter_50 = Translate("TipCounter_50uLFiltered");
      strLC_50 = Translate("Tip_50ulFilter_Aqueous_DispenseSurface_Empty_WSI");
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- 50uL Tip Counter: "), strTipCounter_50);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- 50uL Liquid Class: "), strLC_50);
    }
    intTipSize_300 = 300;
    if (intTipSize_300 == 300)
    {
      strTipCounter_300 = Translate("TipCounter_300uLFiltered");
      strLC_300 = Translate("StandardVolumeFilter_96COREHead_Water_DispenseSurface_Empty");
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- 300uL Tip Counter: "), strTipCounter_300);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- 300uL Liquid Class: "), strLC_300);
    }
    intTipSize_1000 = 1000;
    if (intTipSize_1000 == 1000)
    {
      strTipCounter_1000 = Translate("TipCounter_1000uLFiltered");
      strLC_1000 = Translate("HighVolumeFilter_Water_DispenseJet_Empty");
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- 1000uL Tip Counter: "), strTipCounter_1000);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- 1000uL Liquid Class: "), strLC_1000);
    }
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    {
      loopCounter_Main = 0;
      while (1 == 1)
      {
        loopCounter_Main = loopCounter_Main + 1;
        A_UserInput();
        rtn = B_WorklistHandling();
        if (rtn == 0)
        {
          break;
        }
      }
    }
    if (blnSimulationMode == 0)
    {
      C_LoadInstructions();
      customDialog_2.InitCustomDialog("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");
      customDialog_2.ShowCustomDialog();
      _rtn = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
      if (_rtn == 2)
      {
        abort;
      }
    }
    D_BarcodeScanning();
    E_SequenceCreation();
    F_PipettingSteps();
    SLACKMESSENGER_V2::SendUpdate(ML_STAR, Translate("Complete"));
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    WELL_FORMAT::_ExitLibrary();
    UNIQUE_MEMBERS::_ExitLibrary();
    TRACEARRAY::_ExitLibrary();
    LOOKUP::_ExitLibrary();
    OPT_ORDER::_ExitLibrary();
    LOAD_INSTRUCTIONS::_ExitLibrary();
    CHECKCARRIERPRESENCE::_ExitLibrary();
    SLACKMESSENGER_V2::_ExitLibrary();
  } }
